# >>>> INPUT FILE FOR MC-GPU v1.3 >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# 
#   Sample input file for a basic CT scan simulation:
#    - 4 projections in 45 degree intervals
#    - 1.0e9 histories per projection
#    - 90 kVp energy spectrum
#    - Full-body adult male phantom (Zubal)
#
#   The Zubal male phantom can be downladed from: http://noodle.med.yale.edu/zubal/.
#   The binary Zubal phantom can be converted to the MC-GPU format using the utility 
#   "zubal2mcgpu.c" and the conversion table "zubal2mcgpu_conversion_table.in".
#
#   Voxels bounding box: 51.2 x 51.2 x 97.2 cm^3
#
#                  @file    MC-GPU_v1.3_Zubal.in
#                  @author  Andreu Badal (Andreu.Badal-Soler{at}fda.hhs.gov)
#                  @date    2012/12/12
#

#[SECTION SIMULATION CONFIG v.2009-05-12]
1.0e8                           # TOTAL NUMBER OF HISTORIES, OR SIMULATION TIME IN SECONDS IF VALUE < 100000
1234567890                      # RANDOM SEED (ranecu PRNG)
1                               # GPU NUMBER TO USE WHEN MPI IS NOT USED, OR TO BE AVOIDED IN MPI RUNS
128                             # GPU THREADS PER CUDA BLOCK (multiple of 32)
150                             # SIMULATED HISTORIES PER GPU THREAD

#[SECTION SOURCE v.2011-07-12]
inputs/spectrum.txt            # X-RAY ENERGY SPECTRUM FILE
0.5 -10  0.5                # SOURCE POSITION: X Y Z [cm]
0.0   1.0   0.0                # SOURCE DIRECTION COSINES: U V W
-15.0 -15.0                     # POLAR AND AZIMUTHAL APERTURES FOR THE FAN BEAM [degrees] (input negative to cover the whole detector)

#[SECTION IMAGE DETECTOR v.2009-12-02]
mc-gpu_image.dat                # OUTPUT IMAGE FILE NAME
100    1                     # NUMBER OF PIXELS IN THE IMAGE: Nx Nz
 1.0   0.01                    # IMAGE SIZE (width, height): Dx Dz [cm]
 30000   120000   90          # Emin    Emax   Nbin
 12.0                          # SOURCE-TO-DETECTOR DISTANCE (detector set in front of the source, perpendicular to the initial direction)

#[SECTION CT SCAN TRAJECTORY v.2011-10-25]
180                              # NUMBER OF PROJECTIONS (beam must be perpendicular to Z axis, set to 1 for a single projection)
2.0                            # ANGLE BETWEEN PROJECTIONS [degrees] (360/num_projections for full CT)
 0.0 5000.0                     # ANGLES OF INTEREST (projections outside the input interval will be skipped)
10.5                            # SOURCE-TO-ROTATION AXIS DISTANCE (rotation radius, axis parallel to Z)
 0.0                            # VERTICAL TRANSLATION BETWEEN PROJECTIONS (HELICAL SCAN)

#[SECTION DOSE DEPOSITION v.2012-12-12]
No                             # TALLY MATERIAL DOSE? [YES/NO] (electrons not transported, x-ray energy locally deposited at interaction)
No                             # TALLY 3D VOXEL DOSE? [YES/NO] (dose measured separately for each voxel)
mc-gpu_dose.dat                 # OUTPUT VOXEL DOSE FILE NAME
1  128                          # VOXEL DOSE ROI: X-index min max (first voxel has index 1)
1  128                          # VOXEL DOSE ROI: Y-index min max
1  243                          # VOXEL DOSE ROI: Z-index min max
 
#[SECTION VOXELIZED GEOMETRY FILE v.2009-11-30]
inputs/gammexPhantom.vox         # VOXEL GEOMETRY FILE (penEasy 2008 format; .gz accepted)

#[SECTION MATERIAL FILE LIST v.2009-11-30]
inputs/air.mcgpu##
inputs/water.mcgpu##
inputs/2.0Iodine_5-200keV.mcgpu##
inputs/10.0Iodine_5-200keV.mcgpu# >>>> END INPUT FILE >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
